PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '<Study ID>'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['TEXT_ESP/Slide1.png', 'TEXT_ESP/Slide2.png', 'TEXT_ESP/Slide3.png', 'TEXT_ESP/Slide4.png', 'TEXT_ESP/Slide5.png', 'TEXT_ESP/Slide6.png', 'TEXT_ESP/Slide7.png', 'TEXT_ESP/Slide8.png', 'TEXT_ESP/Slide9.png', 'TEXT_NL/Slide1.png', 'TEXT_NL/Slide2.png', 'TEXT_NL/Slide3.png', 'TEXT_NL/Slide4.png', 'TEXT_NL/Slide5.png', 'TEXT_NL/Slide6.png', 'TEXT_NL/Slide7.png', 'TEXT_NL/Slide8.png', 'TEXT_NL/Slide9.png', 'TEXT_DE/Slide1.png', 'TEXT_DE/Slide2.png', 'TEXT_DE/Slide3.png', 'TEXT_DE/Slide4.png', 'TEXT_DE/Slide5.png', 'TEXT_DE/Slide6.png', 'TEXT_DE/Slide7.png', 'TEXT_DE/Slide8.png', 'TEXT_DE/Slide9.png', 'sound_Scream.wav', 'sound_Silence.wav', 'sound_TestTone.wav', 'stimuli_neck/stim1.png', 'stimuli_neck/stim2.png', 'stimuli_neck/stim3.png', 'stimuli_neck/stim4.png', 'stimuli_neck/stim5.png', 'stimuli_neck/stim6.png', 'stimuli_knee/stim1.png', 'stimuli_knee/stim2.png', 'stimuli_knee/stim3.png', 'stimuli_knee/stim4.png', 'stimuli_knee/stim5.png', 'stimuli_knee/stim6.png', 'stimuli_hand/stim1.png', 'stimuli_hand/stim2.png', 'stimuli_hand/stim3.png', 'stimuli_hand/stim4.png', 'stimuli_hand/stim5.png', 'stimuli_hand/stim6.png', 'stimuli_back/stim1.png', 'stimuli_back/stim2.png', 'stimuli_back/stim3.png', 'stimuli_back/stim4.png', 'stimuli_back/stim5.png', 'stimuli_back/stim6.png', 'Trials/ACQ_1.xlsx', 'Trials/ACQ_2.xlsx', 'Trials/ACQ_3.xlsx', 'Trials/ACQ_4.xlsx', 'Trials/EXT_1.xlsx', 'Trials/EXT_2.xlsx', 'Trials/EXT_3.xlsx', 'Trials/EXT_4.xlsx', 'Trials/GEN_1.xlsx', 'Trials/GEN_2.xlsx', 'Trials/GEN_3.xlsx', 'Trials/GEN_4.xlsx', 'Trials/InstructionsLoop.xlsx', 'Trials/PRE_1.xlsx', 'Trials/PRE_2.xlsx', 'stimuli_misc/icon_Alex.png', 'stimuli_misc/location_back.png', 'stimuli_misc/location_hand.png', 'stimuli_misc/location_knee.png', 'stimuli_misc/location_neck.png', 'stimuli_misc/logo_BPP.png', 'stimuli_misc/logo_UM.png', 'stimuli_misc/placeholder.png', 'TEXT_ENG/Slide1.png', 'TEXT_ENG/Slide2.png', 'TEXT_ENG/Slide3.png', 'TEXT_ENG/Slide4.png', 'TEXT_ENG/Slide5.png', 'TEXT_ENG/Slide6.png', 'TEXT_ENG/Slide7.png', 'TEXT_ENG/Slide8.png', 'TEXT_ENG/Slide9.png']
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [2560, 1440]
  color = 1.0000, 1.0000, 1.0000
  expName = PLAY
  keyboardBackend = PsychToolbox
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Routines
  Routine Calibration
    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        if ((lang === "ESP")) {
            currText = ("TEXT_ESP/" + textFilename);
        } else {
            if ((lang === "DE")) {
                currText = ("TEXT_DE/" + textFilename);
            } else {
                if ((lang === "NL")) {
                    currText = ("TEXT_NL/" + textFilename);
                } else {
                    currText = ("TEXT_ENG/" + textFilename);
                }
            }
        }
      Begin Routine:
        if lang == 'ESP':
            currText = 'TEXT_ESP/' + textFilename
        elif lang == 'DE':
            currText = 'TEXT_DE/' + textFilename
        elif lang == 'NL':
            currText = 'TEXT_NL/' + textFilename
        else:
            currText = 'TEXT_ENG/' + textFilename
      Each Frame:
        iconMouse.clickReset()

        if soundRED.status != STARTED:
            soundRED.status = NOT_STARTED

        if soundBLUE.status != STARTED:
            soundBLUE.status = NOT_STARTED
      Each JS Frame:
        iconMouse.clickReset();
        if ((soundRED.status === PsychoJS.Status.FINISHED)) {
            soundRED.status = NOT_STARTED;
        }
        if ((soundBLUE.status === PsychoJS.Status.FINISHED)) {
            soundBLUE.status = NOT_STARTED;
        }
    ImageComponent CalibrationText
      image [set every repeat] = $currText
      size = (1.2, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent ContinueArrow_2
      fillColor = 0.1294, 0.8667, 0.1294
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.35, -0.3)
      shape = custom polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      vertices = ([0,0],[0,-0.5],[0.7,-0.5],[0.7,-0.7],[1.1,-0.25],[0.7,0.2],[0.7,0],[0,0])
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    MouseComponent ContinueClick_2
      clickable = ContinueArrow_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      startVal [time (s)] = 0
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    SoundComponent soundRED
      sound = sound_Scream.wav
      startVal [condition] = $iconMouse.isPressedIn(iconSoundRED)
      stopVal [duration (s)] = 1.2
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    SoundComponent soundBLUE
      sound [set every repeat] = sound_TestTone.wav
      startVal [condition] = $iconMouse.isPressedIn(iconSoundBLUE)
      stopVal [duration (s)] = 1
      volume [set every repeat] = 0.02
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    MouseComponent iconMouse
      clickable = iconSoundRED,iconSoundBLUE
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent iconSoundRED
      fillColor = 0.0039, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.35, -0.2)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent iconSoundBLUE
      fillColor = -1.0000, -1.0000, 0.0902
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0, -0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine IDcodes
    CodeComponent code_1
      Code Type = Both
      Before JS Experiment:
        let thisGroup = Math.floor(Math.random() * (3 - 1) + 1);
        let i = Math.floor(Math.random() * (5 - 1) + 1);
        let j = Math.floor(Math.random() * (3 - 1) + 1);
        let PREtrials = (("Trials/PRE_" + j.toString()) + ".xlsx");
        let ACQtrials = (("Trials/ACQ_" + i.toString()) + ".xlsx");
        let GENtrials = (("Trials/GEN_" + i.toString()) + ".xlsx");
        let EXTtrials = (("Trials/EXT_" + i.toString()) + ".xlsx");
      Begin Experiment:
        currTest = 'icons/placeholder.png'
        lang = "EN"
      Begin JS Experiment:
        currTest = "icons/placeholder.png";
        lang = "EN";
      Each Frame:
        if languageMouse.isPressedIn(DutchBox):
            lang = 'NL'
            DutchText.setColor('cadetblue')
        elif languageMouse.isPressedIn(GermanBox):
            lang = 'DE'
            GermanText.setColor('cadetblue')
        elif languageMouse.isPressedIn(SpanishBox):
            lang = 'ESP'
            SpanishText.setColor('cadetblue')
        elif languageMouse.isPressedIn(EnglishBox):
            lang = 'EN'
            EnglishText.setColor('cadetblue')
      Each JS Frame:
        if (languageMouse.isPressedIn(DutchBox)) {
            lang = "NL";
            DutchText.setColor("cadetblue");
        } else {
            if (languageMouse.isPressedIn(GermanBox)) {
                lang = "DE";
                GermanText.setColor("cadetblue");
            } else {
                if (languageMouse.isPressedIn(SpanishBox)) {
                    lang = "ESP";
                    SpanishText.setColor("cadetblue");
                } else {
                    if (languageMouse.isPressedIn(EnglishBox)) {
                        lang = "EN";
                        EnglishText.setColor("cadetblue");
                    }
                }
            }
        }
      End JS Routine:
        if ((lang === "ESP")) {
            USunpl.labels = ["de nada", "mucho"];
            RatingScale.labels = ["de nada", "mucho"];
        } else {
            if ((lang === "DE")) {
                USunpl.labels = ["gar nicht", "sehr viel"];
                RatingScale.labels = ["gar nicht", "sehr viel"];
            } else {
                if ((lang === "NL")) {
                    USunpl.labels = ["helemaal niet", "heel erg"];
                    RatingScale.labels = ["helemaal niet", "heel erg"];
                } else {
                    USunpl.labels = ["not at all", "very much"];
                    RatingScale.labels = ["not at all", "very much"];
                }
            }
        }
      End Routine:
        # Set rating scale labels based on language chosen

        if lang == 'ESP':
            USunpl.labels = ('de nada','mucho')
            RatingScale.labels = ('de nada','mucho')
        elif lang == 'DE':
            USunpl.labels = ('gar nicht','sehr viel')
            RatingScale.labels = ('gar nicht','sehr viel')
        elif lang == 'NL':
            USunpl.labels = ('helemaal niet','heel erg')
            RatingScale.labels = ('helemaal niet','heel erg')
        else:
            USunpl.labels = ('not at all','very much')
            RatingScale.labels = ('not at all','very much')
    PolygonComponent ContinueArrow_0
      fillColor = 0.1294, 0.8667, 0.1294
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.35, -0.3)
      saveStartStop = False
      shape = custom polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 3
      vertices = ([0,0],[0,-0.5],[0.7,-0.5],[0.7,-0.7],[1.1,-0.25],[0.7,0.2],[0.7,0],[0,0])
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    MouseComponent ContinueClick_0
      clickable = ContinueArrow_0,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 3.0
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    ImageComponent logo_UM
      image = stimuli_misc/logo_UM.png
      pos = (-0.3, 0.25)
      saveStartStop = False
      size = (0.3,0.15)
      startVal [time (s)] = 0.0
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    ImageComponent logo_BPP
      image = stimuli_misc/logo_BPP.png
      pos = (0.3, 0.25)
      saveStartStop = False
      size = (0.3,0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent EnglishBox
      fillColor = 0.8824, 0.9451, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.45, -0.12)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent DutchBox
      fillColor = 0.8824, 0.9451, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.15, -0.12)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent GermanBox
      fillColor = 0.8824, 0.9451, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.15, -0.12)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent SpanishBox
      fillColor = 0.8824, 0.9451, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.45, -0.12)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent EnglishText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.45, -0.12)
      startVal [time (s)] = 0.0
      text = ENGLISH
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    TextComponent DutchText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.15, -0.12)
      startVal [time (s)] = 0.0
      text = NEDERLANDS
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    TextComponent GermanText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.15, -0.12)
      startVal [time (s)] = 0.0
      text = DEUTSCH
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    TextComponent SpanishText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.45, -0.12)
      startVal [time (s)] = 0.0
      text = ESPANOL
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    MouseComponent languageMouse
      clickable = EnglishBox,DutchBox,GermanBox,SpanishBox
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Trial
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        # Set text elements based on language
        if lang == 'ESP':
            currText='TEXT_ESP/Slide' + str(Qnum) + '.png'
        elif lang == 'DE':
            currText='TEXT_DE/Slide' + str(Qnum) + '.png'
        elif lang == 'NL':
            currText='TEXT_NL/Slide' + str(Qnum) + '.png'
        else:
            currText='TEXT_ENG/Slide' + str(Qnum) + '.png'

        # Set CS image based on condition, CBcode, and location

        if thisGroup == 1:
            if CStype == 'CS+':
                CSname = 'stimuli_' + location + '/stim1.png'
            elif CStype == 'GS1':
                CSname = 'stimuli_' + location + '/stim2.png'
            elif CStype == 'GS2':
                CSname = 'stimuli_' + location + '/stim3.png'
            elif CStype == 'GS3':
                CSname = 'stimuli_' + location + '/stim4.png'
            elif CStype == 'GS4':
                CSname = 'stimuli_' + location + '/stim5.png'
            elif CStype == 'CS-':
                CSname = 'stimuli_' + location + '/stim6.png'
        elif thisGroup == 2:
            if CStype == 'CS+':
                CSname = 'stimuli_' + location + '/stim6.png'
            elif CStype == 'GS1':
                CSname = 'stimuli_' + location + '/stim5.png'
            elif CStype == 'GS2':
                CSname = 'stimuli_' + location + '/stim4.png'
            elif CStype == 'GS3':
                CSname = 'stimuli_' + location + '/stim3.png'
            elif CStype == 'GS4':
                CSname = 'stimuli_' + location + '/stim2.png'
            elif CStype == 'CS-':
                CSname = 'stimuli_' + location + '/stim1.png'
    TextComponent fixation
      color = 0.3255, 0.3255, 0.3255
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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    ImageComponent CS
      image [set every repeat] = $CSname
      pos = (0, 0.25)
      saveStartStop = False
      size = (0.35, 0.35)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 10
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    ImageComponent Question
      image [set every repeat] = $currText
      pos = (0, -0.1)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 5.5
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    SliderComponent RatingScale
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.6471, -0.1765, -0.7647
      forceEndRoutine = False
      granularity = 1
      initVal = 5
      labels = 'a','b'
      letterHeight = 0.02
      opacity = 0.7
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.8, 0.1)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 5.5
      storeRatingTime = False
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    SoundComponent soundUS
      sound [set every repeat] = $USsound
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 1
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    TextComponent fixationJitter
      color = 0.3255, 0.3255, 0.3255
      durationEstim = 3
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 13
      stopVal [duration (s)] = $ISI
      text = +
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    SoundComponent soundTest
      sound [set every repeat] = $volumeTestStimulus
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      volume [set every repeat] = 0.02
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    PolygonComponent iconSoundTest
      durationEstim = 16
      fillColor = -1.0000, -1.0000, 0.0902
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.4, 0.4)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $ISI + 13
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    MouseComponent mouseSoundTest
      clickable = iconSoundTest
      durationEstim = 16
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $ISI + 13
      timeRelativeTo = routine
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  Routine LocationCodes
    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        # Use mouse click to define location variable

        if locationMouse.isPressedIn(polygonBack):
            location = 'back'
        elif locationMouse.isPressedIn(polygonHand):
            location = 'hand'
        elif locationMouse.isPressedIn(polygonKnee):
            location = 'knee'
        elif locationMouse.isPressedIn(polygonNeck):
            location = 'neck'
    PolygonComponent polygonBack
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0.2, -0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent locationBack
      image = stimuli_misc/location_back.png
      pos = (0.2, -0.2)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent polygonHand
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0.2, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent locationHand
      image = stimuli_misc/location_hand.png
      pos = (0.2, 0.2)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent polygonKnee
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (-0.2, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent locationKnee
      image = stimuli_misc/location_knee.png
      pos = (-0.2, 0.2)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent polygonNeck
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (-0.2, -0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent locationNeck
      image = stimuli_misc/location_neck.png
      pos = (-0.2, -0.2)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    MouseComponent locationMouse
      clickable = polygonBack,polygonHand,polygonKnee,polygonNeck
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Instructions
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Reset mouse to record new clicks
        event.clearEvents()

        # Select language
        if lang == 'ESP':
            currText = 'TEXT_ESP/' + textFilename
        elif lang == 'DE':
            currText = 'TEXT_DE/' + textFilename
        elif lang == 'NL':
            currText = 'TEXT_NL/' + textFilename
        else:
            currText = 'TEXT_ENG/' + textFilename
    ImageComponent InstructionText
      image [set every repeat] = $currText
      pos = (-0.2, 0)
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
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    ImageComponent InstructionImage
      image = stimuli_misc/icon_Alex.png
      pos = (0.55, 0.15)
      saveStartStop = False
      size = (0.3, 0.6)
      startVal [time (s)] = 0.0
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    MouseComponent ContinueClick_1
      clickable = ContinueArrow_1,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 3.0
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    PolygonComponent ContinueArrow_1
      fillColor = 0.1294, 0.8667, 0.1294
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.35, -0.3)
      saveStartStop = False
      shape = custom polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 3
      vertices = ([0,0],[0,-0.5],[0.7,-0.5],[0.7,-0.7],[1.1,-0.25],[0.7,0.2],[0.7,0],[0,0])
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  Routine USRating
    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        if ((lang === "ESP")) {
            currText = "TEXT_ESP/Slide3.png";
        } else {
            if ((lang === "DE")) {
                currText = "TEXT_DE/Slide3.png";
            } else {
                if ((lang === "NL")) {
                    currText = "TEXT_NL/Slide3.png";
                } else {
                    currText = "TEXT_ENG/Slide3.png";
                }
            }
        }
      Begin Routine:
        if lang == 'ESP':
            currText = 'TEXT_ESP/Slide3.png'
        elif lang == 'DE':
            currText = 'TEXT_DE/Slide3.png'
        elif lang == 'NL':
            currText = 'TEXT_NL/Slide3.png'
        else:
            currText = 'TEXT_ENG/Slide3.png'
    TextComponent fixation0
      color = 0.3255, 0.3255, 0.3255
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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    SliderComponent USunpl
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.6471, -0.1765, -0.7647
      forceEndRoutine = False
      granularity = 1
      initVal = 5
      labels = 'a','b'
      letterHeight = 0.02
      opacity = 0.7
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.8, 0.1)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 6
      storeRatingTime = False
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    ImageComponent Q_USunpl
      image [set every repeat] = $currText
      pos = (0, 0.2)
      size = (1, 0.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 6
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  Routine UStest
    TextComponent fixation1
      color = 0.3255, 0.3255, 0.3255
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = +
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    SoundComponent testUS
      sound = sound_Scream.wav
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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Flow
  Routine IDcodes
  Routine LocationCodes
  LoopInitiator Intro loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = Trials/InstructionsLoop.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'textFilename': 'slide1.png', 'Descriptor': 'Instructions_1'},
      {'textFilename': 'slide2.png', 'Descriptor': None},
      {'textFilename': 'slide3.png', 'Descriptor': None},
      {'textFilename': 'slide4.png', 'Descriptor': None},
      {'textFilename': 'slide5.png', 'Descriptor': None},
      {'textFilename': 'slide6.png', 'Descriptor': None},
      {'textFilename': 'slide7.png', 'Descriptor': None},
      {'textFilename': 'slide8.png', 'Descriptor': None},
      {'textFilename': 'slide9.png', 'Descriptor': None}]
    Routine Instructions
  LoopTerminator Intro
  LoopInitiator VolumeSetup loopType="TrialHandler"
    Selected rows = 1
    conditionsFile = Trials/InstructionsLoop.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'textFilename': 'slide1.png', 'Descriptor': 'Instructions_1'},
      {'textFilename': 'slide2.png', 'Descriptor': 'Instructions_Calibration'},
      {'textFilename': 'slide3.png', 'Descriptor': 'Q_USunpleasantness'},
      {'textFilename': 'slide4.png', 'Descriptor': None},
      {'textFilename': 'slide5.png', 'Descriptor': None},
      {'textFilename': 'slide6.png', 'Descriptor': None},
      {'textFilename': 'slide7.png', 'Descriptor': 'Q_USexpectancy'},
      {'textFilename': 'slide8.png', 'Descriptor': 'Q_CSfear'},
      {'textFilename': 'slide9.png', 'Descriptor': 'Instructions_End'}]
    Routine Calibration
  LoopTerminator VolumeSetup
  Routine UStest
  Routine USRating
  LoopInitiator PriorBeliefs loopType="TrialHandler"
    Selected rows = 3
    conditionsFile = Trials/InstructionsLoop.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'textFilename': 'slide1.png', 'Descriptor': 'Instructions_1'},
      {'textFilename': 'slide2.png', 'Descriptor': 'Instructions_Calibration'},
      {'textFilename': 'slide3.png', 'Descriptor': 'Q_USunpleasantness'},
      {'textFilename': 'slide4.png', 'Descriptor': 'Instructions_PriorBeliefs'},
      {'textFilename': 'slide5.png', 'Descriptor': 'Q_PriorBeliefs'},
      {'textFilename': 'slide6.png', 'Descriptor': 'Instructions_Conditioning'},
      {'textFilename': 'slide7.png', 'Descriptor': 'Q_USexpectancy'},
      {'textFilename': 'slide8.png', 'Descriptor': 'Q_CSfear'},
      {'textFilename': 'slide9.png', 'Descriptor': 'Instructions_End'}]
    Routine Instructions
  LoopTerminator PriorBeliefs
  LoopInitiator PRE loopType="TrialHandler"
    conditionsFile = $PREtrials
    loopType = sequential
    nReps = 1
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    Routine Trial
  LoopTerminator PRE
  LoopInitiator Conditioning loopType="TrialHandler"
    Selected rows = 5
    conditionsFile = Trials/InstructionsLoop.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'textFilename': 'slide1.png', 'Descriptor': 'Instructions_1'},
      {'textFilename': 'slide2.png', 'Descriptor': 'Instructions_Calibration'},
      {'textFilename': 'slide3.png', 'Descriptor': 'Q_USunpleasantness'},
      {'textFilename': 'slide4.png', 'Descriptor': 'Instructions_PriorBeliefs'},
      {'textFilename': 'slide5.png', 'Descriptor': 'Q_PriorBeliefs'},
      {'textFilename': 'slide6.png', 'Descriptor': 'Instructions_Conditioning'},
      {'textFilename': 'slide7.png', 'Descriptor': 'Q_USexpectancy'},
      {'textFilename': 'slide8.png', 'Descriptor': 'Q_CSfear'},
      {'textFilename': 'slide9.png', 'Descriptor': 'Instructions_End'}]
    Routine Instructions
  LoopTerminator Conditioning
  LoopInitiator ACQ loopType="TrialHandler"
    conditionsFile = $ACQtrials
    loopType = sequential
    nReps = 2
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    Routine Trial
  LoopTerminator ACQ
  Routine USRating
  LoopInitiator GEN loopType="TrialHandler"
    conditionsFile = $GENtrials
    loopType = sequential
    nReps = 1
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    Routine Trial
  LoopTerminator GEN
  Routine USRating
  LoopInitiator EXT loopType="TrialHandler"
    conditionsFile = $EXTtrials
    loopType = sequential
    nReps = 4
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    Routine Trial
  LoopTerminator EXT
  LoopInitiator End loopType="TrialHandler"
    Selected rows = 8
    conditionsFile = Trials/InstructionsLoop.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Instructions
  LoopTerminator End
